PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': '', 'session': '001', 'targets': "['1', '2']", 'order': "['1', '2']"}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1470, 956]
  expName = wegner
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent code_trial
      Code Type = Auto->JS
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      Begin Routine:
        myClock.reset()
        oldTime=0
        text.text=items.pop()
        thisExp.addData('Word',text.text)
        thisExp.addData('Count',thisCount)
      Each Frame:
        timeLeft=math.ceil(thisCount-myClock.getTime())
        if timeLeft != oldTime:
            text_clock.text=str(timeLeft)
            oldTime = timeLeft
        if timeLeft <= 0:
            continueRoutine = False
    TextComponent text_clock
      color = red
      letterHeight = 0.1
      pos = (0, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine loadFillers
    CodeComponent code_fillers
      Code Type = Auto->JS
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      Begin Experiment:
        fillers=[]
      Begin Routine:
        fillers.append(Filler)
  Routine start
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        userows=""
        if expInfo['targets'] == '1':
            useRows = "0:8"
        elif expInfo['targets'] == '2':
            useRows = "8:16"

        countFrom = []
        if expInfo['order'] == '1':
            countFrom = [3,10]
        elif expInfo['order'] == '2':
            countFrom = [10,3]

        items = ["Alarm", "Improve", "Probability","Singer"]
        shuffle(items)
    CodeComponent code_both
      Code Type = Both
      Begin Experiment:
        myClock = core.Clock()
        import math
      Begin JS Experiment:
        myClock = new util.Clock();
  Routine loadLists
    CodeComponent code_items
      Code Type = Auto->JS
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      Begin Experiment:
        items1=[]
        items2=[]
      Begin Routine:
        if listLoop.thisN < 4:
            items1.append(Item)
        else:
            items2.append(Item)
  Routine buildTrials
    CodeComponent code_append
      Code Type = Auto->JS
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      Begin Routine:
        items = []
        for i in range(2):
            items.append(items1.pop())
            items.append(items2.pop())
        for i in range(4):
            items.append(fillers.pop())
        shuffle(items)
        thisCount = countFrom[blocks.thisN]
  Routine instructions
    CodeComponent code_shuffle
      Code Type = Auto->JS
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      Begin Routine:
        shuffle(items1)
        shuffle(items2)
    TextComponent text_instruct
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        In the following task, you will see a series of words presented in the centre of the screen one by one. For every word, your task is to think of, and verbalise (loud and clear) an associate word. For example, if the word “Window” is displayed, you may respond by saying “Door”.
        Below each word, you will also see a countdown timer to indicate how many seconds you have remaining before you need to respond. Specifically, you have 3 seconds to respond to half of the words, and 10 seconds to respond for the remaining half of the words.
        When you are ready, press SPACE to begin with a few practice trials.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end
    TextComponent text_end
      letterHeight = 0.09
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = This is the end of the task, please call the experimenter, thank you!
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  Routine gap
    TextComponent text_gap
      letterHeight = 0.09
      startVal [time (s)] = 0.0
      text = When you are ready, press SPACE to begin the actual trials
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    KeyboardComponent key_resp_gap
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine prePrac
    CodeComponent code_count
      Code Type = Auto->JS
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      Begin Routine:
        thisCount = countFrom[pracBlocks.thisN]
Flow
  Routine start
  LoopInitiator listLoop loopType="TrialHandler"
    Selected rows = $useRows
    conditionsFile = RRR_word_stimuli.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Item': 'Climb', 'Filler': 'Shallow'},
      {'Item': 'High', 'Filler': 'Candidate'},
      {'Item': 'Hill', 'Filler': 'Gesture'},
      {'Item': 'Top', 'Filler': 'Reader'},
      {'Item': 'Bus', 'Filler': 'Quarter'},
      {'Item': 'Drive', 'Filler': 'Elite'},
      {'Item': 'Truck', 'Filler': 'Voice'},
      {'Item': 'Wheel', 'Filler': 'Option'},
      {'Item': 'Cake', 'Filler': None},
      {'Item': 'Candy', 'Filler': None},
      {'Item': 'Snack', 'Filler': None},
      {'Item': 'Sweet', 'Filler': None},
      {'Item': 'Dead', 'Filler': None},
      {'Item': 'Funeral', 'Filler': None},
      {'Item': 'Grave', 'Filler': None},
      {'Item': 'Tomb', 'Filler': None}]
    Routine loadLists
  LoopTerminator listLoop
  LoopInitiator fillerLoop loopType="TrialHandler"
    Selected rows = 0:8
    conditionsFile = RRR_word_stimuli.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [{'Item': 'Climb', 'Filler': 'Shallow'},
      {'Item': 'High', 'Filler': 'Candidate'},
      {'Item': 'Hill', 'Filler': 'Gesture'},
      {'Item': 'Top', 'Filler': 'Reader'},
      {'Item': 'Bus', 'Filler': 'Quarter'},
      {'Item': 'Drive', 'Filler': 'Elite'},
      {'Item': 'Truck', 'Filler': 'Voice'},
      {'Item': 'Wheel', 'Filler': 'Option'},
      {'Item': 'Cake', 'Filler': None},
      {'Item': 'Candy', 'Filler': None},
      {'Item': 'Snack', 'Filler': None},
      {'Item': 'Sweet', 'Filler': None},
      {'Item': 'Dead', 'Filler': None},
      {'Item': 'Funeral', 'Filler': None},
      {'Item': 'Grave', 'Filler': None},
      {'Item': 'Tomb', 'Filler': None}]
    Routine loadFillers
  LoopTerminator fillerLoop
  Routine instructions
  LoopInitiator pracBlocks loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 2
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    Routine prePrac
    LoopInitiator practice loopType="TrialHandler"
      loopType = random
      nReps = 2
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      Routine trial
    LoopTerminator practice
  LoopTerminator pracBlocks
  Routine gap
  LoopInitiator blocks loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 2
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    Routine buildTrials
    LoopInitiator trials loopType="TrialHandler"
      loopType = sequential
      nReps = 8
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      Routine trial
    LoopTerminator trials
  LoopTerminator blocks
  Routine end
