PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': '', 'targets': "['1', '2']", 'order': "['1', '2']", 'Country': "['GB','CN','DE','FR','ID','IT','NL','PT','RO','TR','US']"}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2022.2.5
  Window size (pixels) = [1920, 1080]
  expName = wegner
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent code_trial
      Code Type = Auto->JS
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      Begin Routine:
        myClock.reset()
        oldTime=0
        text.text=items.pop()
        thisExp.addData('Word',text.text)
        thisExp.addData('Count',thisCount)
      Each Frame:
        timeLeft=math.ceil(thisCount-myClock.getTime())
        if timeLeft != oldTime:
            text_clock.text=str(timeLeft)
            oldTime = timeLeft
        if timeLeft <= 0:
            continueRoutine = False
    TextComponent text_clock
      color = red
      letterHeight = 0.1
      pos = (0, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine loadFillers
    CodeComponent code_fillers
      Code Type = Auto->JS
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      Begin Experiment:
        fillers=[]
      Begin Routine:
        fillers.append(Filler)
  Routine start
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        userows=""

        langOffset = 0
        if expInfo['Country'] == 'ID':
            langOffset = 16
        elif expInfo['Country'] == 'CN':
            langOffset = 32
        elif expInfo['Country'] == 'IT':
            langOffset = 48
        elif expInfo['Country'] == 'FR':
            langOffset = 64
        elif expInfo['Country'] == 'TR':
            langOffset = 80
        elif expInfo['Country'] == 'US':
            langOffset = 96
        elif expInfo['Country'] == 'DE':
            langOffset = 112
        elif expInfo['Country'] == 'PT':
            langOffset = 128
        elif expInfo['Country'] == 'RO':
            langOffset = 144
        elif expInfo['Country'] == 'NL':
            langOffset = 160

        if expInfo['targets'] == '1':
            useRows = str(langOffset) + ":" + str(langOffset+8)
        elif expInfo['targets'] == '2':
            useRows = str(langOffset+8) + ":" + str(langOffset+16)

        fillerRows = str(langOffset) + ":" + str(langOffset+8)
        instructRows = str(langOffset+8) + ":" + str(langOffset+15)

        countFrom = []
        if expInfo['order'] == '1':
            countFrom = [3,10]
        elif expInfo['order'] == '2':
            countFrom = [10,3]
    CodeComponent code_both
      Code Type = Both
      Begin Experiment:
        myClock = core.Clock()
        import math
      Begin JS Experiment:
        myClock = new util.Clock();
  Routine loadLists
    CodeComponent code_items
      Code Type = Auto->JS
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      Begin Experiment:
        items1=[]
        items2=[]
      Begin Routine:
        if listLoop.thisN < 4:
            items1.append(Item)
        else:
            items2.append(Item)
  Routine buildTrials
    CodeComponent code_append
      Code Type = Auto->JS
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      Begin Routine:
        items = []
        for i in range(2):
            items.append(items1.pop())
            items.append(items2.pop())
        for i in range(4):
            items.append(fillers.pop())
        shuffle(items)
        thisCount = countFrom[blocks.thisN]
  Routine instructions
    CodeComponent code_shuffle
      Code Type = Auto->JS
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      Begin Routine:
        items = [instructions[3], instructions[4], instructions[5],instructions[6]]
        shuffle(items)
        shuffle(items1)
        shuffle(items2)
    TextComponent text_instruct
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructions[0]
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end
    TextComponent text_end
      letterHeight = 0.09
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructions[2]
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  Routine gap
    TextComponent text_gap
      letterHeight = 0.09
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructions[1]
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    KeyboardComponent key_resp_gap
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine prePrac
    CodeComponent code_count
      Code Type = Auto->JS
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      Begin Routine:
        thisCount = countFrom[pracBlocks.thisN]
  Routine loadInstructions
    CodeComponent code_fillers_2
      Code Type = Auto->JS
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      Begin Experiment:
        instructions=[]
      Begin Routine:
        instructions.append(Filler)
Flow
  Routine start
  LoopInitiator listLoop loopType="TrialHandler"
    Selected rows = $useRows
    conditionsFile = RRR_word_stimuli.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Language': 'English', 'Item': 'Climb', 'Filler': 'Shallow'},
      {'Language': 'English', 'Item': 'High', 'Filler': 'Shave'},
      {'Language': 'English', 'Item': 'Hill', 'Filler': 'Gesture'},
      {'Language': 'English', 'Item': 'Top', 'Filler': 'Idea'},
      {'Language': 'English', 'Item': 'Bus', 'Filler': 'Quarter'},
      {'Language': 'English', 'Item': 'Drive', 'Filler': 'Anger'},
      {'Language': 'English', 'Item': 'Truck', 'Filler': 'Voice'},
      {'Language': 'English', 'Item': 'Wheel', 'Filler': 'Option'},
      {'Language': 'English', 'Item': 'Home', 'Filler': 'In the following task, you will see a series of words presented in the centre of the screen one by one. For every word, your task is to think of, and verbalise (loud and clear) an associate word. For example, if the word “Window” is displayed, you may respond by saying “Door”.\nBelow each word, you will also see a countdown timer to indicate how many seconds you have remaining before you need to respond. Specifically, you have 3 seconds to respond to half of the words, and 10 seconds to respond for the remaining half of the words.\nWhen you ar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,
      {'Language': 'English', 'Item': 'Door', 'Filler': 'When you are ready, press SPACE to begin the actual trials'},
      {'Language': 'English', 'Item': 'Brick', 'Filler': 'This is the end of the task, please call the experimenter, thank you!'},
      {'Language': 'English', 'Item': 'Roof', 'Filler': 'Improve'},
      {'Language': 'English', 'Item': 'Mother', 'Filler': 'Singer'}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
    Routine loadLists
  LoopTerminator listLoop
  LoopInitiator fillerLoop loopType="TrialHandler"
    Selected rows = $fillerRows
    conditionsFile = RRR_word_stimuli.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [{'Language': 'English', 'Item': 'Climb', 'Filler': 'Shallow'},
      {'Language': 'English', 'Item': 'High', 'Filler': 'Shave'},
      {'Language': 'English', 'Item': 'Hill', 'Filler': 'Gesture'},
      {'Language': 'English', 'Item': 'Top', 'Filler': 'Idea'},
      {'Language': 'English', 'Item': 'Bus', 'Filler': 'Quarter'},
      {'Language': 'English', 'Item': 'Drive', 'Filler': 'Anger'},
      {'Language': 'English', 'Item': 'Truck', 'Filler': 'Voice'},
      {'Language': 'English', 'Item': 'Wheel', 'Filler': 'Option'},
      {'Language': 'English', 'Item': 'Home', 'Filler': 'In the following task, you will see a series of words presented in the centre of the screen one by one. For every word, your task is to think of, and verbalise (loud and clear) an associate word. For example, if the word “Window” is displayed, you may respond by saying “Door”.\nBelow each word, you will also see a countdown timer to indicate how many seconds you have remaining before you need to respond. Specifically, you have 3 seconds to respond to half of the words, and 10 seconds to respond for the remaining half of the words.\nWhen you ar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,
      {'Language': 'English', 'Item': 'Door', 'Filler': 'When you are ready, press SPACE to begin the actual trials'},
      {'Language': 'English', 'Item': 'Brick', 'Filler': 'This is the end of the task, please call the experimenter, thank you!'},
      {'Language': 'English', 'Item': 'Roof', 'Filler': 'Improve'},
      {'Language': 'English', 'Item': 'Mother', 'Filler': 'Singer'}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
    Routine loadFillers
  LoopTerminator fillerLoop
  LoopInitiator instructLoop loopType="TrialHandler"
    Selected rows = $instructRows
    conditionsFile = RRR_word_stimuli.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine loadInstructions
  LoopTerminator instructLoop
  Routine instructions
  LoopInitiator pracBlocks loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 2
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    Routine prePrac
    LoopInitiator practice loopType="TrialHandler"
      loopType = random
      nReps = 2
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      Routine trial
    LoopTerminator practice
  LoopTerminator pracBlocks
  Routine gap
  LoopInitiator blocks loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 2
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    Routine buildTrials
    LoopInitiator trials loopType="TrialHandler"
      loopType = sequential
      nReps = 8
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      Routine trial
    LoopTerminator trials
  LoopTerminator blocks
  Routine end
